PsychoPy2experiment version="2021.2.0"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'gender': '', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  expName = Roughness.
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Routines
  Routine feedback
    CodeComponent checkCorrect
      Code Type = Auto->JS
      Begin Routine:
        if resp.corr == 1:
            msg = "Correct! Well done!"
        else:
            msg = "Too bad! Wrong that time!"
    TextComponent feedBackText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine thanks
    TextComponent thanksText
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You're done! You've reached the end of the second part!

        You will now move on to the third and final part of the experiment.

        Press any key to continue.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instrText
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will be presented with two tones and will have to respond to simple questions using a slider.

        Please pay attention to both tones, as you will need to compare them to each other.

        The questions will either be about how similar the two tones are in their pitch, tremolo or roughness.

        Press any key to proceed.
    KeyboardComponent instrEnd
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    TextComponent stimulus
      letterHeight = 0.07
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = +++
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Core imports and definitions in 'Volume Check'

        time = np.linspace(0, 1, sample_rate)
        carrier_tone = np.sin(2*np.pi*carrier*time)

        amp = np.sin(2*np.pi*am*time)
        tone = carrier_tone * (1 + mod * amp)

        #tone , tone_factor = normalise_loudness(tone)
        #tone = vol_factor*np.vstack([tone, tone]).T
        #wave = sound.Sound(0.99*tone, sampleRate=sample_rate)
        #wave.play()

        tone = normalise_loudness(tone)[0]
        play_tone(vol_factor*tone)
    TextComponent text_10
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      wrapWidth = 0.65
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      text [set every repeat]:
        $question
  Routine Fixation1
    TextComponent fix
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = + 
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    TextComponent text_11
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.4
      stopVal [duration (s)] = 0.6
      wrapWidth = 0.65
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      text [set every repeat]:
        $question
  Routine end_block
    TextComponent text_2
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You've reached the end of the block.

        You can take a short break.

        Press any key when you're ready to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_block
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        If you would like to take a break please do so now.

        When you are ready press any key to start.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_tremolo
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Did the second sound have more or less tremolo than the first?
    KeyboardComponent key_resp_4
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_pitch
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Did the second and first sound have the same pitch?
    KeyboardComponent key_resp_5
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response
    TextComponent text
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 0.65
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      text [set every repeat]:
        hello
    SliderComponent slider
      fillColor = 1.0000, -1.0000, -1.0000
      forceEndRoutine = True
      granularity = 0
      initVal = 0
      letterHeight = 0.07
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1,100)
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  Routine instructions2
    TextComponent text_13
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will be presented with two tones and will have to make judgements about how similar they are using a slider.

        Please pay attention to both tones, as you will need to compare them to each other.

        Press any key to proceed.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questions
    TextComponent text_8
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        If you have any questions about the experiment please ask now.

        Otherwise if you have read the information sheet and have no questions, press any key to continue.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine example_sounds
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Core imports and definitions in 'Volume Check'
        roughness_block_no += 1
        if roughness_block_no == 4:
            # Skip examples on end of final block
            continueRoutine = False

        text_7.text = 'Loading...'

        seconds = 3
        time = np.linspace(0, seconds, seconds*sample_rate)
        pad = int(0.1*sample_rate)
        full_time = np.linspace(0, seconds+0.2, int((seconds+0.2)*sample_rate))
        pad_time = np.linspace(0, 0.2, int(0.2*sample_rate))

        carrier = 1000
        am_tremo = 10
        am_rough = 70

        # Create signals
        f0 = carrier-500
        f1 = carrier+500

        pitch = signal.chirp(time, f0, 3, f1)
        start = np.cos(2*np.pi*f0*pad_time)
        stop = np.cos(2*np.pi*f1*pad_time)
        pitch = np.hstack((start, pitch, stop))

        am = np.linspace(0, 0.5, len(time))
        am = am * (np.cos(2*np.pi*am_rough*time) + 1)
        am = np.hstack((np.zeros((pad,)), am, np.ones((pad,))))
        am = 1 - am
        rough = am * np.sin(2*np.pi*carrier*full_time)

        am = np.linspace(0, 0.5, len(time))
        am = am * (np.cos(2*np.pi*am_tremo*time) + 1)
        am = np.hstack((np.zeros((pad,)), am, np.ones((pad,))))
        am = 1 - am

        tremolo = am * np.sin(2*np.pi*carrier*full_time)

        # Can change these to all False to speed up testing
        #tones_played = [False, False, False, False, False, False]
        if roughness_block_no > 1:
            tones_played = [True, True, True, True, True, True]
        else:
            tones_played = [False, False, False, False, False, False]
            examples_played = True

        normalise = True
        if normalise:
            pitch, pitch_norm = normalise_loudness(pitch)
            rough, rough_norm = normalise_loudness(rough)
            tremolo, tremolo_norm = normalise_loudness(tremolo)

        myClock.reset()
      Each Frame:
        if myClock.getTime() > 4:
            text_7.text = ''
            if np.all(tones_played):
                text_9.text = 'Press space to continue'

            keys = ExampleKeys.getKeys()
            keys = [k.name for k in keys]
            if '1' in keys:
                play_tone(pitch)
                text_7.text = 'playing...'
                tones_played[0] = True
            elif '2' in keys:
                play_tone(np.flipud(pitch))
                text_7.text = 'playing...'
                tones_played[1] = True
            elif '5' in keys:
                play_tone(rough)
                text_7.text = 'playing...'
                tones_played[2] = True
            elif '6' in keys:
                play_tone(np.flipud(rough))
                text_7.text = 'playing...'
                tones_played[3] = True
            elif '9' in keys:
                play_tone(tremolo)
                text_7.text = 'playing...'
                tones_played[4] = True
            elif '0' in keys:
                play_tone(np.flipud(tremolo))
                text_7.text = 'playing...'
                tones_played[5] = True
            elif 'space' in keys and np.all(tones_played):
                print('ends')
                continueRoutine = False
            elif 'esc' in keys:
                core.quit()
        else:
            keys = ExampleKeys.getKeys()
    KeyboardComponent ExampleKeys
      allowedKeys = 1, 2, 5, 6, 9, 0, 'esc', 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent text_6
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Example Sounds:
        Press the number buttons to hear:

        1 - increasing pitch
        2 - decreasing pitch

        5 - increasing roughness
        6 - decreasing roughness


        9 - increasing tremolo
        0 - decreasing tremolo

        Please listen to each of the sounds until you know what is meant by each sensation.
    TextComponent text_7
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Play each sound at least once.
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  Routine ready_go
    TextComponent text_countdown
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $str(3-int(t))
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  Routine information
  Routine start
    TextComponent text_12
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = When you are ready, press any key to start the experiment. 
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions2_2
  Routine fixation2
    TextComponent text_15
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine trial2
    TextComponent text_16
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = +++
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    TextComponent text_17
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = How different are the two sounds? 
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    SoundComponent sound_1
      disabled = True
      sound [set every repeat] = $instrument1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0.2
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    SoundComponent sound_2
      disabled = True
      sound [set every repeat] = $instrument2
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # Core imports and definitions in 'Volume Check'

        path1 = pathlib.Path(instrument1).name
        instrument1 = os.path.join('sounds', path1)
        sound1 = sound.Sound(instrument1)
        tone1 = sound1.sndArr
        tone1 = vol_factor * normalise_loudness(tone1)[0]
        sound1._setSndFromArray(tone1)

        path2 = pathlib.Path(instrument2).name
        instrument2 = os.path.join('sounds', path2)
        sound2 = sound.Sound(instrument2)
        tone2 = sound2.sndArr
        tone2 = vol_factor * normalise_loudness(tone2)[0]
        sound2._setSndFromArray(tone2)

        sound1.play()
        core.wait(2)
        sound2.play()
        core.wait(1)
  Routine response2
    TextComponent text_18
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = How different are the two sounds? 
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    SliderComponent slider_2
      forceEndRoutine = True
      granularity = 0
      labels = ('The same', 'Completely different')
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1,100)
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  Routine end
    TextComponent text_19
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        You've reached the end of the experiment!

        Thank you for taking part.
  Routine slider_response
    TextComponent text_20
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
      wrapWidth = 0.65
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    SliderComponent slider_3
      forceEndRoutine = True
      granularity = 0
      labels = ('The Same', 'Completely Different')
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1,100)
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  Routine vol_check
    TextComponent text_21
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Press '1' to increase volume
        and '0' to decrease.


        Press space when you have a comfortable volume
    KeyboardComponent key_resp_10
      allowedKeys = 1, 0, 'return', 'esc'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        ##
        from psychopy.event import Mouse
        import numpy as np
        from psychopy import sound, core, visual
        from scipy import signal
        import pathlib
        import os
        from psychopy import logging
        from psychopy.sound._base import apodize
        print(apodize)

        myClock = core.Clock()

        ##
        sample_rate = 48000
        roughness_block_no = 0

        ##
        def play_tone(tone, apodize_tone=True):
            #tone = np.vstack([tone, tone]).T
            if apodize_tone:
                tone = apodize(tone, sampleRate=sample_rate)
            wave = sound.Sound(0.99*tone, sampleRate=sample_rate)
            wave.play()
            myClock.reset()

        def normalise_loudness(sig):
            rms_level = -10
            r = 10**(rms_level / 10.0)
            a = np.sqrt( (len(sig) * r**2) / np.sum(sig**2) )
            return sig*a, a
      Begin Routine:
        seconds = 1
        time = np.linspace(0, seconds, seconds*sample_rate)

        carrier = 600

        tone = np.linspace(0, 0.5, len(time))
        tone = np.cos(2*np.pi*carrier*time)
        tone, tone_factor = normalise_loudness(tone)

        vol_factor = 1

        play_tone(tone)
      Each Frame:
        if myClock.getTime() > 1:

            keys = key_resp_10.getKeys()
            keys = [k.name for k in keys]
            if '1' in keys:
                print('up!')
                vol_factor = vol_factor * 1.25
                play_tone(vol_factor * tone)
            elif '0' in keys:
                print('down!')
                vol_factor = vol_factor * 0.75
                play_tone(vol_factor * tone)
            elif 'space' in keys:
                print('ends')
                continueRoutine = False
            elif 'esc' in keys:
                core.quit()
      End Routine:
        msg = f'Participant selected vol_factor={vol_factor}'
        logging.log(level=logging.DATA, msg=msg)
  Routine instructions_audiogram
    TextComponent text_22
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will now undergo a short audiogram test.

        Please press the spacebar as soon as you hear any tone. Some tones may be very quiet so please listen carefully.

        Press space to continue.
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_audio
    TextComponent text_23
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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  Routine trial_audio
    TextComponent text_24
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    KeyboardComponent key_resp_12
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Core imports and definitions in 'Volume Check'

        time = np.linspace(0, 1, sample_rate)
        tone = np.sin(2*np.pi*carrier2*time)

        tone = normalise_loudness(tone)[0]

        play_tone(volume2*vol_factor*tone)
  Routine fixation_audio2
    TextComponent text_25
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine examples_text
    TextComponent text_26
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Before starting, some example sounds will be played to introduce what is meant by tremolo, roughness and pitch.

        Press any key to continue.
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine welcome
    TextComponent text_27
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Hello!
        Thank you for choosing to take part in The Shape of Sound experiment.

        This study is made up of 3 parts.

        First you will undergo an audiogram test that takes around 2 minutes. The second part will take around 30 minutes during which you will be hearing simple beeps. During the third part you will be hearing short instrument recordings for about 10 - 15 minutes.

        Please press any key to continue.
    KeyboardComponent key_resp_14
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine vol_instructions
    TextComponent text_28
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will now set the volume at which the sounds in the experiment will be played.

        Please choose the volume carefully as you will not be able to readjust it later. Make sure the sounds are audible while still comfortable to listen to and keep in mind the length of the experiment when choosing.

        Press any key to continue.
    KeyboardComponent key_resp_15
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine audiogram_end
    TextComponent text_29
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You reached the end of the audiogram test!

        You will now move on to the second part of the study.

        Press any key to continue.
    KeyboardComponent key_resp_16
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questions_2
    TextComponent text_30
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        This part of the experiment is made up of three blocks each taking about 10 minutes.

        If you have any questions please ask now, as you will not be able to do so once the experiment begins.

        Please press any key to start the experiment.
    KeyboardComponent key_resp_17
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine questions_3
    TextComponent text_14
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        There will be 1 block of trials, the duration of which will be approximately 10 -15 minutes.

        If you have any questions about the experiment please ask now, as you will not be able to do so once the experiment has begun.

        If not press any key to continue.
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  Routine questions
  Routine vol_instructions
  Routine vol_check
  Routine instructions_audiogram
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = audiogram2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'carrier2': 440, 'volume2': 0.5},
      {'carrier2': 440, 'volume2': 0.25},
      {'carrier2': 440, 'volume2': 0.125},
      {'carrier2': 440, 'volume2': 0.0625},
      {'carrier2': 440, 'volume2': 0.03125},
      {'carrier2': 440, 'volume2': 0.015625},
      {'carrier2': 440, 'volume2': 0.0078125},
      {'carrier2': 440, 'volume2': 0.00390625},
      {'carrier2': 440, 'volume2': 0.001953125},
      {'carrier2': 440, 'volume2': 0.0009765625},
      {'carrier2': 1000, 'volume2': 0.5},
      {'carrier2': 1000, 'volume2': 0.25},
      {'carrier2': 1000, 'volume2': 0.125},
      {'carrier2': 1000, 'volume2': 0.0625},
      {'carrier2': 1000, 'volume2': 0.03125},
      {'carrier2': 1000, 'volume2': 0.015625},
      {'carrier2': 1000, 'volume2': 0.0078125},
      {'carrier2': 1000, 'volume2': 0.00390625},
      {'carrier2': 1000, 'volume2': 0.001953125},
      {'carrier2': 1000, 'volume2': 0.0009765625},
      {'carrier2': 700, 'volume2': 0.5},
      {'carrier2': 700, 'volume2': 0.25},
      {'carrier2': 700, 'volume2': 0.125},
      {'carrier2': 700, 'volume2': 0.0625},
      {'carrier2': 700, 'volume2': 0.03125},
      {'carrier2': 700, 'volume2': 0.015625},
      {'carrier2': 700, 'volume2': 0.0078125},
      {'carrier2': 700, 'volume2': 0.00390625},
      {'carrier2': 700, 'volume2': 0.001953125},
      {'carrier2': 700, 'volume2': 0.0009765625}]
    Routine fixation_audio
    Routine trial_audio
    Routine fixation_audio2
  LoopTerminator trials_3
  Routine audiogram_end
  Routine instructions
  Routine examples_text
  Routine example_sounds
  Routine questions_2
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine ready_go
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'carrier': 440, 'am': 5, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 10, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 20, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 40, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 80, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 160, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 440, 'am': 320, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 5, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 10, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 20, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 40, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 80, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 160, 'question': 'Was the second sound more or less rough than than the first?'},
        {'carrier': 1000, 'am': 320, 'question': 'Was the second sound more or less rough than than the first?'}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
      Routine Fixation1
      LoopInitiator pair loopType="TrialHandler"
        conditionsFile = modulation.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [{'mod': 0.2},
          {'mod': 1}]
        Routine Trial
      LoopTerminator pair
      Routine slider_response
    LoopTerminator trials
    Routine end_block
    Routine example_sounds
  LoopTerminator block
  Routine thanks
  Routine instructions2
  Routine questions_3
  Routine ready_go
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = instruments.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\bass-clarinet_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\cello_C4_1_fortissimo_arco-normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\clarinet_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\guitar_C4_very-long_forte_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\flute_C4_1_forte_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\oboe_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\french-horn_C4_very-long_forte_normal.wav'},
      {'instrument1': 'C:\\Users\\axt275\\Downloads\\banjo_C4_very-long_forte_normal.wav', 'instrument2': 'C:\\Users\\axt275\\Downloads\\trumpet_C4_1_fortissimo_normal.wav'}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
    Routine fixation2
    Routine trial2
    Routine response2
  LoopTerminator trials_2
  Routine end
