PsychoPy2experiment version="2022.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = Audiogram
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import sound, core
        import numpy as np

        time = np.linspace(0, 1, 48000)
        data = np.sin(2*np.pi*carrier*time)

        data = np.vstack([data, data]).T
        wave = sound.Sound(data,
                           sampleRate=48000,
                           volume=volume)
        wave.play()
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Instructions
    TextComponent text_instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Hello!

        Please press the spacebar when you hear a beep.

        Press spacebar to continue
    KeyboardComponent InstructionsEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation1
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
      text = +
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  Routine Fixation2
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine End
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks for taking part!
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audiogram.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'carrier': 440, 'attenuation': 0},
      {'carrier': 440, 'attenuation': 0.1},
      {'carrier': 440, 'attenuation': 0.2},
      {'carrier': 440, 'attenuation': 0.3},
      {'carrier': 440, 'attenuation': 0.4},
      {'carrier': 440, 'attenuation': 0.5},
      {'carrier': 440, 'attenuation': 0.6},
      {'carrier': 440, 'attenuation': 0.7},
      {'carrier': 440, 'attenuation': 0.8},
      {'carrier': 440, 'attenuation': 0.9},
      {'carrier': 1000, 'attenuation': 0},
      {'carrier': 1000, 'attenuation': 0.1},
      {'carrier': 1000, 'attenuation': 0.2},
      {'carrier': 1000, 'attenuation': 0.3},
      {'carrier': 1000, 'attenuation': 0.4},
      {'carrier': 1000, 'attenuation': 0.5},
      {'carrier': 1000, 'attenuation': 0.6},
      {'carrier': 1000, 'attenuation': 0.7},
      {'carrier': 1000, 'attenuation': 0.8},
      {'carrier': 1000, 'attenuation': 0.9},
      {'carrier': 1768, 'attenuation': 0},
      {'carrier': 1768, 'attenuation': 0.1},
      {'carrier': 1768, 'attenuation': 0.2},
      {'carrier': 1768, 'attenuation': 0.3},
      {'carrier': 1768, 'attenuation': 0.4},
      {'carrier': 1768, 'attenuation': 0.5},
      {'carrier': 1768, 'attenuation': 0.6},
      {'carrier': 1768, 'attenuation': 0.7},
      {'carrier': 1768, 'attenuation': 0.8},
      {'carrier': 1768, 'attenuation': 0.9}]
    Routine Fixation1
    Routine trial
    Routine Fixation2
  LoopTerminator trials
  Routine End
