PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = instruments1
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +++
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    SoundComponent sound_2
      sound [set every repeat] = $instrument1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_3
      sound [set every repeat] = $instrument2
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
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    TextComponent text_8
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = How different are the two sounds? 
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  Routine instructions
    TextComponent text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You will be presented with two tones and will have to make judgements about how similar they are using a slider. Please pay attention to both tones, as you will need to compare them to each other.

        Press any key to proceed.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response
    TextComponent text_2
      letterHeight = 0.07
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = How different are the two sounds? 
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      initVal = 0
      labels = ('The same', 'Completely different')
      letterHeight = 0.07
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,100)
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  Routine fixation
    TextComponent text_4
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine end
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = end!!
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  Routine ready_go
    TextComponent text_6
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every frame] = $str(3-int(t))
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  Routine questions
    TextComponent text_7
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        There will be 1 block of trials, the duration of which will be approximately 15 minutes.

        If you have any questions about the experiment please ask now, as you will not be able to do so once the experiment has begun.

        If not press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine questions
  Routine ready_go
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = instruments.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'bass-clarinet_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'cello_C4_1_fortissimo_arco-normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'clarinet_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'guitar_C4_very-long_forte_normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'flute_C4_1_forte_normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'oboe_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'trombone_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'trumpet_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'tuba_C4_1_fortissimo_normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'viola_C4_1_fortissimo_arco-normal.wav'},
      {'instrument1': 'banjo_C4_very-long_forte_normal.wav', 'instrument2': 'violin_C4_1_fortissimo_arco-normal.wav'},
      {'instrument1': 'bass-clarinet_C4_1_fortissimo_normal.wav', 'instrument2': 'cello_C4_1_fortissimo_arco-normal.wav'},
      {'instrument1': 'bass-clarinet_C4_1_fortissimo_normal.wav', 'instrument2': 'clarinet_C4_1_fortissimo_normal.wav'}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
    Routine fixation
    Routine trial
    Routine response
  LoopTerminator trials
  Routine end
